PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = SONY PJ
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = MEG_tutorial_demo_stimulus_2
  keyboardBackend = ioHub
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Routines
  Routine triangle_trial
    PolygonComponent triangle
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fixation_t
      fillColor = white
      lineWidth = 0.1
      shape = cross
      size = (0.05, 0.05)
      startVal [condition] = $triangle.status == FINISHED
      stopVal [duration (s)] = $iti
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        iti = random.randint(1000,1500)/1000
    PolygonComponent photodiode_t
      fillColor = white
      pos = (-0.85, -0.45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [condition] = $triangle.status==STARTED
      stopVal [duration (s)] = 0.01
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    ParallelOutComponent trig_t
      address = 0xDFB8
      register = EIO
      startData = 1
      startVal [condition] = $triangle.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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  Routine circle_trial
    PolygonComponent circle
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fixation_c
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [condition] = $circle.status==FINISHED
      stopVal [duration (s)] = $iti
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    PolygonComponent photodiode_c
      fillColor = white
      pos = (-0.85, -0.45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [condition] = $circle.status==STARTED
      stopVal [duration (s)] = 0.01
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        iti=random.randint(1000,1500)/1000
    ParallelOutComponent trig_c
      address = 0xDFB8
      register = EIO
      startData = 2
      startVal [condition] = $circle.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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  Routine high_trial
    SoundComponent high_tone
      sound = 880
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      syncScreenRefresh = False
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        iti=random.randint(2000,2500)/1000
    ParallelOutComponent trig_high
      address = 0xDFB8
      register = EIO
      startData = 4
      startVal [condition] = $high_tone.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = False
      syncScreenRefresh = False
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  Routine instrictions_visual
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        You will see and hear a sequence of triangles and tones.

        Press 1 when you see a circle.

        Press 2 when you hear a tone.
  Routine instructions_audio
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        You will hear a sequence of low and high tones, starting with a low tone.

        Press 1 when you hear a low tone.

        Press 2 when you hear a high tone.
  Routine low_trial
    SoundComponent low_tone
      sound = 440
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      syncScreenRefresh = False
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    PolygonComponent fixation_low
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        iti=random.randint(2000,2500)/1000
    ParallelOutComponent trig_low
      address = 0xDFB8
      register = EIO
      startData = 3
      startVal [condition] = $low_tone.status==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = False
      syncScreenRefresh = False
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Flow
  Routine instrictions_visual
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine circle_trial
    Routine low_trial
  LoopTerminator trials
